//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 6)


// ********** Transform

(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")

// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "mhd")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseDifferentiableOverlap "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

