// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 6)
// default schedule: isotropic upsampling with factor 2

// ********** Transform

(FinalGridSpacingInPhysicalUnits 20.0 20.0 20.0)
(GridSpacingSchedule 8.0 4.0 2.0 1.0 1.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 5000)
(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")



// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)

// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "mhd")
(ShowExactMetricValue "false")
(ErodeMask "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 1000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
